PsychoPy2experiment version="2020.1.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['subject_number'], expName, expInfo['date'])
  Experiment info = {'subject_number': '', 'stimulus_set': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1, -1, -1]
  expName = DEV
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Routines
  Routine introduction
    TextComponent introduction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We are going to show you some pictures of food and have you rate how appetizing each food is.

        You will use a scale from 1 to 4, where 1 is "Not at all appetizing" and 4 is "Extremely appetizing."

        If you have a strong negative reaction to the food, press 0.


        Press any key to continue.
    KeyboardComponent introduction_key_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent instruction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please use the numbers along the top of the keyboard to select your rating.

        The rating task will now begin.


        Press any key to continue.
    KeyboardComponent instruction_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation_cross
    PolygonComponent fixation
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (48, 48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = pix
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  Routine rating
    TextComponent rating_text
      color = grey
      durationEstim = 1
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How appetizing is this food?
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    ImageComponent food_image
      durationEstim = 1
      image [set every repeat] = $image_file
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square1
      durationEstim = 1
      fillColor [set every frame] = $square1_fill_color
      pos = (-0.5, -0.35)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text1
      color = grey
      durationEstim = 1
      letterHeight = 0.05
      pos = (-0.5, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    PolygonComponent square2
      durationEstim = 1
      fillColor [set every frame] = $square2_fill_color
      pos = (-0.35, -0.35)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text2
      color = grey
      durationEstim = 1
      letterHeight = 0.05
      pos = (-0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    PolygonComponent square3
      durationEstim = 1
      fillColor [set every frame] = $square3_fill_color
      pos = (-0.2, -0.35)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text3
      color = grey
      durationEstim = 1
      letterHeight = 0.05
      pos = (-0.2, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    PolygonComponent square4
      durationEstim = 1
      fillColor [set every frame] = $square4_fill_color
      pos = (-0.05, -0.35)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text4
      color = grey
      durationEstim = 1
      letterHeight = 0.05
      pos = (-0.05, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    PolygonComponent square0
      durationEstim = 1
      fillColor [set every frame] = $square0_fill_color
      pos = (0.35, -0.35)
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text0
      color = grey
      durationEstim = 1
      letterHeight = 0.05
      pos = (0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    KeyboardComponent key_resp
      allowedKeys = '1', '2', '3', '4', '0'
      durationEstim = 1
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        #
        # Custom code to change color of square with rating
        # and end routine after 0.25 seconds of feedback.
        black_color = [-1, -1, -1]
        green_color = [-1, 1, -1]
        feedback_duration = 0.25
        square1_fill_color = black_color
        square2_fill_color = black_color
        square3_fill_color = black_color
        square4_fill_color = black_color
        square0_fill_color = black_color
      Begin Routine:
        #
        # Custom code to change color of square with rating
        # and end routine after 0.25 seconds of feedback.
        start_time = None
      Each Frame:
        #
        # Custom code to change color of square with rating
        # and end routine after 0.25 seconds of feedback.
        if key_resp.status == STARTED and len(_key_resp_allKeys) and start_time is None:
            keypress = _key_resp_allKeys
            if '1' in keypress:
                start_time = t
                square1_fill_color = green_color
                square2_fill_color = black_color
                square3_fill_color = black_color
                square4_fill_color = black_color
                square0_fill_color = black_color
            elif '2' in keypress:
                start_time = t
                square1_fill_color = black_color
                square2_fill_color = green_color
                square3_fill_color = black_color
                square4_fill_color = black_color
                square0_fill_color = black_color
            elif '3' in keypress:
                start_time = t
                square1_fill_color = black_color
                square2_fill_color = black_color
                square3_fill_color = green_color
                square4_fill_color = black_color
                square0_fill_color = black_color
            elif '4' in keypress:
                start_time = t
                square1_fill_color = black_color
                square2_fill_color = black_color
                square3_fill_color = black_color
                square4_fill_color = green_color
                square0_fill_color = black_color
            elif '0' in keypress:
                start_time = t
                square1_fill_color = black_color
                square2_fill_color = black_color
                square3_fill_color = black_color
                square4_fill_color = black_color
                square0_fill_color = green_color

        # End routine if a key has been pressed and feedback_duration time has elapsed.
        if start_time is not None and t > start_time + feedback_duration:
            continueRoutine = False
            square1_fill_color = black_color
            square2_fill_color = black_color
            square3_fill_color = black_color
            square4_fill_color = black_color
            square0_fill_color = black_color
  Routine end
    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = That concludes this task. The assessor will be with you shortly.
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  Routine get_images
    CodeComponent get_images_code
      Code Type = Py
      Begin Routine:
        #
        # Get food categories that the user craves and does not crave
        #
        def get_categories(subject, stimulus_set='1'):
            categories = []
            if stimulus_set is '1':
                image_base_path = os.path.join('Stimuli', 'CategorizedImages', 'Unhealthy')
                food_category_mapping = {'1': 'Barbeque',
                                         '2': 'Candy',
                                         '3': 'Chocolate',
                                         '4': 'Cookies',
                                         '5': 'Donuts',
                                         '6': 'FastFood',
                                         '7': 'Fries',
                                         '8': 'IceCream',
                                         '9': 'Pasta',
                                         '10': 'Pizza',
                                         '11': 'ProcessedMeats',
                                         '12': 'SaltySnacks',
                                         '13': 'SoftDrinks'}
                with open('categories_DEV' + subject + '.txt') as f:
                    for line in f:
                        categories.append(food_category_mapping[line.strip()])
            elif stimulus_set is '2':
                image_base_path = os.path.join('Stimuli', 'WTPImages')
                categories = ['healthy', 'unhealthy']

            return categories, image_base_path

        subject = expInfo['subject_number']

        categories, image_base_path = get_categories(subject, stimulus_set=expInfo['stimulus_set'])

        # Get the images related to those food categories
        image_names = []
        for category in categories:
            image_path = os.path.join(image_base_path, category)
            for i in os.listdir(image_path):
                image_names.append(os.path.join(image_path, i))

        # Randomize the display order of the images, and write conditions.csv file required
        # for this task.
        shuffle(image_names)
        with open('conditions.csv', mode='w') as f, open('imagePrezOrder_DEV' + subject + '.txt', mode='w') as ipo:
            f.write('image_file\n')
            for i in image_names:
                f.write(i + '\n')
                ipo.write(i + '\n')
  Routine pause
    CodeComponent pause_code
      Code Type = Py
      Begin Routine:
        if trials.thisN > 0 and trials.thisN % 20 == 0:
            continueRoutine = True
        else:
            continueRoutine = False
    TextComponent pause_text
      durationEstim = 1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any key when you are ready to continue
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    KeyboardComponent pause_key_resp
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine introduction
  Routine instructions
  Routine get_images
  Routine fixation_cross
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Candy/Candy22.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Fries/Fries19.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Donuts/Donuts16.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Candy/Candy01.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Barbeque/Barbeque06.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Candy/Candy15.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Candy/Candy29.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Barbeque/Barbeque10.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Donuts/Donuts15.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Donuts/Donuts21.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Candy/Candy12.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Donuts/Donuts02.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Fries/Fries13.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Fries/Fries22.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Candy/Candy08.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Fries/Fries04.jpg')]),
      OrderedDict([('image_file', 'Stimuli/CategorizedImages/Unhealthy/Donuts/Donuts28.jpg')])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
    Routine rating
    Routine pause
  LoopTerminator trials
  Routine end
